<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:NewScale;assembly=NewScale"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Left</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>-500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Right</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>7000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:NewScaleControl" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>PositionError</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MotorStatus</Selector>
      </Expression>
      <Expression xsi:type="HasFlag">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:MotorStatus">
          <Value>MotorRunning</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>14471741</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>